CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Material>[A-z0-9]{4})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Channel>c[1-3])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Cell_type>..)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'Cytoskeleton': 'Material', 'Nucleus': 'Material'}, {'Cytoskeleton': 'Cell_type', 'Nucleus': 'Cell_type'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "c3")
    Name to assign these images:Cytoskeleton
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does Channel "c1")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:Material
    Metadata category:Material
    Metadata category:Cell_type

RescaleIntensity:[module_num:5|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
    Select the input image:Cytoskeleton
    Name the output image:Cyto
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,1.0
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
RescaleIntensity:[module_num:6|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
    Select the input image:Nucleus
    Name the output image:Nuclei
    Rescaling method:Stretch each image to use the full intensity range
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:Cyto
    Name the output image:Cyto2
    Select how the illumination function is calculated:Background
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    Block size:4
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
ImageMath:[module_num:8|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Cell
    Image or measurement?:Image
    Select the first image:Cyto2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Nuclei
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Nuclei
    Name the primary objects to be identified:NucleiObj
    Typical diameter of objects, in pixel units (Min,Max):25,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:NucleiObj
    Name the objects to be identified:SkeletonObj
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cyto2
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:SkeletonObj
    Select the smaller identified objects:NucleiObj
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureImageAreaOccupied:[module_num:12|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
    Measure the area occupied by:Objects
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    Select object sets to measure:NucleiObj, SkeletonObj

MeasureObjectIntensity:[module_num:13|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
    Select images to measure:Nuclei
    Select objects to measure:NucleiObj

MeasureObjectIntensity:[module_num:14|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
    Select images to measure:Cyto2
    Select objects to measure:SkeletonObj

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:Cyto2
    Select objects to measure:Cytoplasm

CalculateMath:[module_num:16|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
    Name the output measurement:Nuclei_to_cell
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:NucleiObj
    Select the numerator measurement:Intensity_MeanIntensity_Nuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:SkeletonObj
    Select the denominator measurement:Intensity_MeanIntensity_Cyto2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:17|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
    Name the output measurement:Nuclei_to_cytoplasm
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:NucleiObj
    Select the numerator measurement:Intensity_MeanIntensity_Nuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Intensity_MeanIntensity_Cyto2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureObjectSizeShape:[module_num:18|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
    Select object sets to measure:NucleiObj, SkeletonObj
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:19|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
    Select images to measure:Cyto2
    Select objects to measure:SkeletonObj
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureTexture:[module_num:20|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
    Select images to measure:Nuclei
    Select objects to measure:NucleiObj
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:macrophages_3
    Overwrite existing files without warning?:No
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