CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Material>[A-z0-9]{4})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Channel>c[1-3])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Cell_type>..)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'Nucleus': 'Material'}, {'Nucleus': 'Cell_type'}]
    Image set matching method:Metadata
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "c1")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:Material
    Metadata category:Material
    Metadata category:Cell_type

RescaleIntensity:[module_num:5|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
    Select the input image:Nucleus
    Name the output image:Nuclei
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Nuclei
    Name the primary objects to be identified:NucleiObj
    Typical diameter of objects, in pixel units (Min,Max):25,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,0.95
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    Log transform before thresholding?:No
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
MeasureImageAreaOccupied:[module_num:7|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
    Measure the area occupied by:Objects
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    Select object sets to measure:NucleiObj

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:Nuclei
    Select objects to measure:NucleiObj

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:NucleiObj
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:10|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
    Select images to measure:Nuclei
    Select objects to measure:NucleiObj
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureTexture:[module_num:11|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
    Select images to measure:Nuclei
    Select objects to measure:NucleiObj
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:nuclei_M2_NT_
    Overwrite existing files without warning?:No
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